// Rabbit Purkinje AP Model as published in Mohr et al. (2022)
def model RabbitPurkinjeAPModel as
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt_millisecond as
    unit millivolt {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microA_per_cm2 as
    unit ampere {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: millisecond {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -85, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: microF_per_cm2 {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var E_Na: millivolt {init: 74, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#calcium_reversal_potential
    var E_Ca: millivolt {init: 40, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var E_K: millivolt {init: -85, pub: out};
    var time: millisecond {pub: in};
    var I_NaF: microA_per_cm2 {pub: in};
    var I_NaL: microA_per_cm2 {pub: in};
    var I_K1: microA_per_cm2 {pub: in};
    var I_toF: microA_per_cm2 {pub: in};
    var I_toS: microA_per_cm2 {pub: in};
    var I_CaL: microA_per_cm2 {pub: in};
    var I_Kr: microA_per_cm2 {pub: in};
    var I_Ks: microA_per_cm2 {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var I_stim: microA_per_cm2 {pub: out};
    var i_Stim_Start: millisecond {init: 0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var I_stimMagnitude: microA_per_cm2 {init: -40};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var i_Stim_Period: millisecond {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var I_stimDuration: millisecond {init: 1};
    I_stim = sel
      case (time >= i_Stim_Start) and (time-i_Stim_Start-floor((time-i_Stim_Start)/i_Stim_Period)*i_Stim_Period <= I_stimDuration):
        I_stimMagnitude;
      otherwise:
        0{microA_per_cm2};
    endsel;
    ode(V, time) = -(I_stim+I_NaF+I_NaL+I_K1+I_toF+I_toS+I_CaL+I_Kr+I_Ks)/Cm;
  enddef;

  def comp fast_sodium_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var I_NaF: microA_per_cm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_NaF: milliS_per_cm2 {init: 16.52};
    var E_Na: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var mf: dimensionless {priv: in};
    var hf: dimensionless {priv: in};
    I_NaF = g_NaF*mf*hf*(V-E_Na);
  enddef;

  def comp fast_sodium_channel_m_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate
    var mf: dimensionless {init: 0.00, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_mf: millivolt {init: -25.0};
    var k_mf: millivolt {init: 5.0};
    var tau_mf: millisecond {init: 0.005};
    var mf_ss: dimensionless;
    mf_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-E_mf)/k_mf));
    ode(mf, time) = (mf_ss-mf)/tau_mf;
  enddef;

  def comp fast_sodium_channel_h_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate
    var hf: dimensionless {init: 0.9820, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation
    var shift: millivolt {init: 0};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_hf: millivolt {init: -69.0};
    var k_hf: millivolt {init: 3.96};
    var tau_hf: millisecond {init: 2.0};
    var hf_ss: dimensionless;
    hf_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-E_hf-shift)/k_hf));
    ode(hf, time) = (hf_ss-hf)/tau_hf;
  enddef;

  def comp slow_sodium_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current
    var I_NaL: microA_per_cm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_persistent_sodium_current_conductance
    var g_NaL: milliS_per_cm2 {init: 0.03};
    var E_Na: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var ml: dimensionless {priv: in};
    var hl: dimensionless {priv: in};
    I_NaL = g_NaL*ml*hl*(V-E_Na);
  enddef;

  def comp slow_sodium_channel_m_gate as
    var ml: dimensionless {init: 0.00, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_ml: millivolt {init: -30.0};
    var k_ml: millivolt {init: 5.0};
    var tau_ml: millisecond {init: 15.0};
    var ml_ss: dimensionless;
    ml_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-E_ml)/k_ml));
    ode(ml, time) = (ml_ss-ml)/tau_ml;
  enddef;

  def comp slow_sodium_channel_h_gate as
    var hl: dimensionless {init: 0.8237, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_hl: millivolt {init: -75.6};
    var k_hl: millivolt {init: 6.3};
    var tau_hl: millisecond;
    var hl_ss: dimensionless;
    tau_hl = 120.0{dimensionless}+exp((V+100.0{dimensionless})/25.0{dimensionless});
    hl_ss = 0.1{dimensionless}+0.9{dimensionless}/(1.0{dimensionless}+exp((V-E_hl)/k_hl));
    ode(hl, time) = (hl_ss-hl)/tau_hl;
  enddef;

  def comp Ltype_calcium_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var I_CaL: microA_per_cm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var g_CaL: milliS_per_cm2 {init: 0.078};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_fCa_gate
    var y_ca_Ltype: dimensionless {init: 1.0, pub: out};
    var E_Ca: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var f: dimensionless {priv: in};
    var d: dimensionless {priv: in};
    I_CaL = g_CaL*d*f*y_ca_Ltype*(V-E_Ca);
  enddef;

  def comp Ltype_calcium_channel_d_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate
    var d: dimensionless {init: 0.00, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_d: millivolt {init: -14.6};
    var k_d: millivolt {init: 5.5};
    var tau_d: millisecond {init: 0.7};
    var d_ss: dimensionless;
    d_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-E_d)/k_d));
    ode(d, time) = (d_ss-d)/tau_d;
  enddef;

  def comp Ltype_calcium_channel_f_gate as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate
    var f: dimensionless {init: 0.7585, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_f: millivolt {init: -31.0};
    var k_f: millivolt {init: 5.54};
    var tau_f: millisecond;
    var f_ss: dimensionless;
    tau_f = 25.1{dimensionless}/(0.7{dimensionless}*exp(-sqr(0.0337{dimensionless})*sqr(V+14.5{dimensionless}))+0.04{dimensionless});
    f_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-E_f)/k_f));
    ode(f, time) = (f_ss-f)/tau_f;
  enddef;

  def comp fast_transient_outward_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_transient_outward_current
    var I_toF: microA_per_cm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_transient_outward_current_conductance
    var g_toF: milliS_per_cm2 {init: 0.06};
    var E_K: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var sf: dimensionless {priv: in};
    var rf: dimensionless {priv: in};
    I_toF = g_toF*rf*sf*(V-E_K);
  enddef;

  def comp fast_transient_outward_channel_r_gate as
    var rf: dimensionless {init: 0.0043, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_rf: millivolt {init: -3.0};
    var k_rf: millivolt {init: 15.0};
    var tau_rf: millisecond;
    var rf_ss: dimensionless;
    tau_rf = 3.5{dimensionless}*exp(-1.0{dimensionless}*V/30.0{dimensionless}*V/30.0{dimensionless})+1.5{dimensionless};
    rf_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-E_rf)/k_rf));
    ode(rf, time) = (rf_ss-rf)/tau_rf;
  enddef;

  def comp fast_transient_outward_channel_s_gate as
    var sf: dimensionless {init: 0.9941, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_sf: millivolt {init: -33.5};
    var k_sf: millivolt {init: 10.0};
    var tau_sf: millisecond;
    var sf_ss: dimensionless;
    tau_sf = 20.0{dimensionless}/(1.0{dimensionless}+exp((V-E_sf)/k_sf))+20.0{dimensionless};
    sf_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-E_sf)/k_sf));
    ode(sf, time) = (sf_ss-sf)/tau_sf;
  enddef;

  def comp sustained_transient_outward_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_transient_outward_current
    var I_toS: microA_per_cm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_transient_outward_current_conductance
    var g_toS: milliS_per_cm2 {init: 0.02};
    var E_K: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var ss: dimensionless {priv: in};
    var rs: dimensionless {priv: in};
    var rss: dimensionless;
    var E_rss: millivolt {init: -33.5};
    var k_rss: millivolt {init: 10.0};
    rss = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-E_rss)/k_rss));
    I_toS = g_toS*rs*(ss+0.5{dimensionless}*rss)*(V-E_K);
  enddef;

  def comp sustained_transient_outward_channel_r_gate as
    var rs: dimensionless {init: 0.0043, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_rs: millivolt {init: -3.0};
    var k_rs: millivolt {init: 15.0};
    var tau_rs: millisecond;
    var rs_ss: dimensionless;
    tau_rs = 9.0{dimensionless}/(1.0{dimensionless}+exp((V-E_rs)/k_rs))+0.5{dimensionless};
    rs_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-E_rs)/k_rs));
    ode(rs, time) = (rs_ss-rs)/tau_rs;
  enddef;

  def comp sustained_transient_outward_channel_s_gate as
    var ss: dimensionless {init: 0.2797, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_ss: millivolt {init: -33.5};
    var k_ss: millivolt {init: 10.0};
    var tau_ss: millisecond;
    var ss_ss: dimensionless;
    tau_ss = 3000.0{dimensionless}/(1.0{dimensionless}+exp((V+60.0{dimensionless})/k_ss))+30.0{dimensionless};
    ss_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-E_ss)/k_ss));
    ode(ss, time) = (ss_ss-ss)/tau_ss;
  enddef;

  def comp rapidly_activating_delayed_rectifier_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var I_Kr: microA_per_cm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: milliS_per_cm2 {init: 0.03};
    var E_K: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var xr: dimensionless {priv: in};
    var y_ss: dimensionless;
    var E_y: millivolt {init: -33.0};
    var k_y: millivolt {init: 22.4};
    y_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-E_y)/k_y));
    I_Kr = g_Kr*xr*y_ss*(V-E_K);
  enddef;

  def comp rapidly_activating_delayed_rectifier_channel_xr_gate as
    var xr: dimensionless {init: 0.0095, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_xr: millivolt {init: -50.0};
    var k_xr: millivolt {init: 7.5};
    var tau_xr: millisecond;
    var xr_ss: dimensionless;
    tau_xr = 1.0{dimensionless}/(0.00138{dimensionless}*(V+7.0{dimensionless})/(1.0{dimensionless}-exp(-0.123{dimensionless}*(V+7.0{dimensionless})))+0.00061{dimensionless}*(V+10.0{dimensionless})/(exp(0.145{dimensionless}*(V+10.0{dimensionless}))-1.0{dimensionless}));
    xr_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-E_xr)/k_xr));
    ode(xr, time) = (xr_ss-xr)/tau_xr;
  enddef;

  def comp slowly_activating_delayed_rectifier_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var I_Ks: microA_per_cm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: milliS_per_cm2 {init: 0.1505};
    var E_K: millivolt {pub: in};
    var time: millisecond {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var xs: dimensionless {priv: in};
    var ys: dimensionless {priv: in};
    I_Ks = g_Ks*xs*ys*(V-E_K);
  enddef;

  def comp slowly_activating_delayed_rectifier_channel_xs_gate as
    var xs: dimensionless {init: 0.0152, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_xs: millivolt {init: 1.5};
    var k_xs: millivolt {init: 16.7};
    var tau_xs: millisecond;
    var xs_ss: dimensionless;
    tau_xs = 1.0{dimensionless}/(7.19{dimensionless}*pow(10{dimensionless}, -5{dimensionless})*(V+30.0{dimensionless})/(1.0{dimensionless}-exp(-0.148{dimensionless}*(V+30.0{dimensionless})))+1.31{dimensionless}*pow(10{dimensionless}, -4{dimensionless})*(V+30.0{dimensionless})/(exp(0.0687{dimensionless}*(V+30.0{dimensionless}))-1.0{dimensionless}));
    xs_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-E_xs)/k_xs));
    ode(xs, time) = (xs_ss-xs)/tau_xs;
  enddef;

  def comp slowly_activating_delayed_rectifier_channel_ys_gate as
    var ys: dimensionless {init: 0.1340, pub: out};
    var V: millivolt {pub: in};
    var time: millisecond {pub: in};
    var E_ys: millivolt {init: 1.5};
    var k_ys: millivolt {init: 16.7};
    var tau_ys: millisecond;
    var ys_ss: dimensionless;
    tau_ys = 4.0{dimensionless}/(7.19{dimensionless}*pow(10{dimensionless}, -5{dimensionless})*(V+30.0{dimensionless})/(1.0{dimensionless}-exp(-0.148{dimensionless}*(V+30.0{dimensionless})))+1.31{dimensionless}*pow(10{dimensionless}, -4{dimensionless})*(V+30.0{dimensionless})/(exp(0.0687{dimensionless}*(V+30.0{dimensionless}))-1.0{dimensionless}));
    ys_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V-E_ys)/k_ys));
    ode(ys, time) = (ys_ss-ys)/tau_ys;
  enddef;

  def comp inward_rectifier_channel as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var I_K1: microA_per_cm2 {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: milliS_per_cm2 {init: 0.29};
    var E_K: millivolt {pub: in};
    var time: millisecond {pub: in};
    var V: millivolt {pub: in};
    var E_z: millivolt {init: -92.0};
    var k_z: millivolt {init: 10.0};
    var z_ss: dimensionless;
    z_ss = 1.0{dimensionless}/(1.0{dimensionless}+exp((V-E_z)/k_z));
    I_K1 = g_K1*z_ss*(V-E_K);
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_channel incl
        comp fast_sodium_channel_m_gate;
        comp fast_sodium_channel_h_gate;
      endcomp;
      comp slow_sodium_channel incl
        comp slow_sodium_channel_m_gate;
        comp slow_sodium_channel_h_gate;
      endcomp;
      comp Ltype_calcium_channel incl
        comp Ltype_calcium_channel_d_gate;
        comp Ltype_calcium_channel_f_gate;
      endcomp;
      comp fast_transient_outward_channel incl
        comp fast_transient_outward_channel_r_gate;
        comp fast_transient_outward_channel_s_gate;
      endcomp;
      comp sustained_transient_outward_channel incl
        comp sustained_transient_outward_channel_r_gate;
        comp sustained_transient_outward_channel_s_gate;
      endcomp;
      comp rapidly_activating_delayed_rectifier_channel incl
        comp rapidly_activating_delayed_rectifier_channel_xr_gate;
      endcomp;
      comp slowly_activating_delayed_rectifier_channel incl
        comp slowly_activating_delayed_rectifier_channel_xs_gate;
        comp slowly_activating_delayed_rectifier_channel_ys_gate;
      endcomp;
      comp inward_rectifier_channel;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_channel incl
      comp fast_sodium_channel_m_gate;
      comp fast_sodium_channel_h_gate;
    endcomp;
    comp slow_sodium_channel incl
      comp slow_sodium_channel_m_gate;
      comp slow_sodium_channel_h_gate;
    endcomp;
    comp Ltype_calcium_channel incl
      comp Ltype_calcium_channel_d_gate;
      comp Ltype_calcium_channel_f_gate;
    endcomp;
    comp fast_transient_outward_channel incl
      comp fast_transient_outward_channel_r_gate;
      comp fast_transient_outward_channel_s_gate;
    endcomp;
    comp sustained_transient_outward_channel incl
      comp sustained_transient_outward_channel_r_gate;
      comp sustained_transient_outward_channel_s_gate;
    endcomp;
    comp rapidly_activating_delayed_rectifier_channel incl
      comp rapidly_activating_delayed_rectifier_channel_xr_gate;
    endcomp;
    comp slowly_activating_delayed_rectifier_channel incl
      comp slowly_activating_delayed_rectifier_channel_xs_gate;
      comp slowly_activating_delayed_rectifier_channel_ys_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_channel and environment for
    vars time and time;
  enddef;
  def map between slow_sodium_channel and environment for
    vars time and time;
  enddef;
  def map between Ltype_calcium_channel and environment for
    vars time and time;
  enddef;
  def map between fast_transient_outward_channel and environment for
    vars time and time;
  enddef;
  def map between sustained_transient_outward_channel and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier_channel and environment for
    vars time and time;
  enddef;
  def map between rapidly_activating_delayed_rectifier_channel and environment for
    vars time and time;
  enddef;
  def map between slowly_activating_delayed_rectifier_channel and environment for
    vars time and time;
  enddef;
  def map between membrane and fast_sodium_channel for
    vars V and V;
    vars E_Na and E_Na;
    vars I_NaF and I_NaF;
  enddef;
  def map between membrane and slow_sodium_channel for
    vars V and V;
    vars E_Na and E_Na;
    vars I_NaL and I_NaL;
  enddef;
  def map between membrane and inward_rectifier_channel for
    vars V and V;
    vars E_K and E_K;
    vars I_K1 and I_K1;
  enddef;
  def map between membrane and fast_transient_outward_channel for
    vars V and V;
    vars E_K and E_K;
    vars I_toF and I_toF;
  enddef;
  def map between membrane and sustained_transient_outward_channel for
    vars V and V;
    vars E_K and E_K;
    vars I_toS and I_toS;
  enddef;
  def map between membrane and Ltype_calcium_channel for
    vars V and V;
    vars E_Ca and E_Ca;
    vars I_CaL and I_CaL;
  enddef;
  def map between membrane and rapidly_activating_delayed_rectifier_channel for
    vars V and V;
    vars E_K and E_K;
    vars I_Kr and I_Kr;
  enddef;
  def map between membrane and slowly_activating_delayed_rectifier_channel for
    vars V and V;
    vars E_K and E_K;
    vars I_Ks and I_Ks;
  enddef;
  def map between fast_sodium_channel and fast_sodium_channel_m_gate for
    vars mf and mf;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_channel and fast_sodium_channel_h_gate for
    vars hf and hf;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_sodium_channel and slow_sodium_channel_m_gate for
    vars ml and ml;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_sodium_channel and slow_sodium_channel_h_gate for
    vars hl and hl;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ltype_calcium_channel and Ltype_calcium_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ltype_calcium_channel and Ltype_calcium_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_transient_outward_channel and fast_transient_outward_channel_s_gate for
    vars sf and sf;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_transient_outward_channel and fast_transient_outward_channel_r_gate for
    vars rf and rf;
    vars time and time;
    vars V and V;
  enddef;
  def map between sustained_transient_outward_channel and sustained_transient_outward_channel_s_gate for
    vars ss and ss;
    vars time and time;
    vars V and V;
  enddef;
  def map between sustained_transient_outward_channel and sustained_transient_outward_channel_r_gate for
    vars rs and rs;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapidly_activating_delayed_rectifier_channel and rapidly_activating_delayed_rectifier_channel_xr_gate for
    vars xr and xr;
    vars time and time;
    vars V and V;
  enddef;
  def map between slowly_activating_delayed_rectifier_channel and slowly_activating_delayed_rectifier_channel_xs_gate for
    vars xs and xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between slowly_activating_delayed_rectifier_channel and slowly_activating_delayed_rectifier_channel_ys_gate for
    vars ys and ys;
    vars time and time;
    vars V and V;
  enddef;
enddef;
